PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[-1,-1,-1]
  expName = click_baseline
  logging level = debug
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Routines
  Routine trial
    CodeComponent code_trial
      Code Type = Py
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      Before Experiment:
        # in order to subclass the Rect class (in 'Begin Experiment')
        # it must be directly imported, see
        # https://github.com/psychopy/psychopy/issues/1159
        from psychopy.visual.rect import Rect

        # import random.choice for sampling with replacement
        # in 'Begin Experiment' -> gen_light_order
        from random import choice
        # import random.uniform for randomly picking a decimal
        # value in 'Begin Experiment' -> gen_rand_point
        from random import uniform

        # define variables representing trial phases
        # pre-demonstration phase (only presenting targets in grey)
        PRE_PHASE = 'pre'
        # demonstration phase (showing the participant the correct
        # sequence)
        DEMO_PHASE = 'demo'
        # demonstration to response phase (pause inbetween)
        DEMO_TO_RESP_PHASE = 'demo_to_response'
        # participant response phase
        RESPONSE_PHASE = 'response'
        # end phase (allowing the last clicked target to finish flashing)
        END_PHASE = 'end'
      Begin Experiment:
        class LightRect(Rect):
            """
            Represents a rectangle that can light up and be clicked.

            Attributes
            ----------
            is_lit : boolean
                Should be True if the rectangle is lighting up,
                otherwise should be False.
            light_flip_countdown: int
                Represents the number of window flips left before
                the rectangle should stop being lit up.
            rest_color: string
                A hex color code that describes what color the rectangle
                should have when in its resting (non-lit-up) state.
            lit_color: string
                A hex color code that describes what color the rectangle
                should have when in its lit-up state.
            Methods
            ----------
            switch_on: See docstring
            switch_off: See docstring
            """
            is_lit = False
            light_flip_countdown = 0
            lit_color = TARGET_LIGHT_COL
            rest_color = TARGET_NEUTRAL_COL


            def switch_on(self, duration):
                """
                Checks if this rectangle is already in a lit up state.
                If not, sets the rectangle to be in lit state for 'duration' flips,
                changes this rectangle's color and sets `is_lit` to True. Returns
                True if switched on, otherwise False.
                """
                self.light_flip_countdown = duration
                self.is_lit = True
                self.fillColor = self.lit_color
                self.lineColor = self.lit_color
                switched_on = True
                return switched_on

            def switch_off(self):
                """
                Checks if this rectangle is in a lit up state, and if so,
                decrements the flip countdown counter. If the counter
                is then <=0, reverts this rectangle's color back to neutral
                and resets `is_lit`. Returns True if switched off, otherwise
                False.
                """
                switched_off = False
                if self.is_lit:
                    self.light_flip_countdown -= 1
                    if self.light_flip_countdown <= 0:
                        self.fillColor = self.rest_color
                        self.lineColor = self.rest_color
                        self.is_lit = False
                        switched_off = True
                return switched_off

            def print_lit(self):
                print(self.is_lit)

        class Point:
            """
            Represents (x, y) coordinates in 2-dimensional space.
            """
            def __init__(self, x, y):
                self.x = x
                self.y = y

            def __sub__(self, other):
                """
                Returns the euclidean distance between this and the
                other passed point.
                """
                dist = ((self.x - other.x)**2 + (self.y - other.y)**2)**(1/2)
                return dist

            def __str__(self):
                """
                Returns a string representation '(x, y)' of this point.
                """
                return "({}, {})".format(self.x, self.y)

            def __repr__(self):
                """
                Returns a description of how this point can be
                recreated.
                """
                return "Point({}, {})".format(self.x, self.y)

            def as_tuple(self):
                """
                Returns a (x, y) tuple with this point's x/y coordinates.
                """
                return self.x, self.y

        def points_collide(point_ls, new_point):
            """
            Goes through a list of Point instances and compares
            the new_point to see if the new_point is too close
            to one of the points in the point_ls. Returns True if
            there is a collision, otherwise False.
            """
            collides = False
            for old_point in point_ls:
                if (new_point - old_point) < MIN_TARGET_DISTANCE:
                    collides = True
                    break
            return collides

        def gen_rand_point():
            """
            Generates a random point within the target area, with
            coordinates rounded to three decimals.
            """
            x_coord = uniform(-AREA_WIDTH_DEG // 2, AREA_WIDTH_DEG // 2)
            y_coord = uniform(-AREA_HEIGHT_DEG // 2, AREA_HEIGHT_DEG // 2)
            x_coord, y_coord = round(x_coord, 3), round(y_coord, 3)
            return Point(x_coord, y_coord)

        def gen_point_ls():
            """
            Generates a list of (x, y) coordinate Point instances until
            there are as many instances as there should be targets/trial.
            """
            finished_list = False
            while not finished_list:
                    collision_counter = 0
                    point_ls = []
                    while len(point_ls) < NUM_TARGETS:
                        new_point = gen_rand_point()
                        if points_collide(point_ls, new_point):
                            collision_counter += 1
                        else:
                            point_ls.append(new_point)
                        if collision_counter > 200:
                            break
                    if len(point_ls) == NUM_TARGETS:
                        finished_list = True
            return point_ls

        def gen_light_order(seq_len, num_targets):
            """
            Generates a pseudorandom order in which targets should
            be lit up, with length based on the passed sequence
            length, and numbers based on
            the number of targets. The same target is allowed to
            light up twice, but not more, in a row.
            """
            # generate set of all target numbers
            num_population = {x for x in range(num_targets)}
            order_ls = []
            while len(order_ls) < seq_len:
                # create set which represents valid numbers to add to order list
                eligible_nums = num_population
                if len(order_ls) >= MAX_REPEAT_NUM:
                    # check if the MAX_REPEAT_NUM most recent
                    # elements all have the same value, and if so,
                    # exclude this value from the set of eligible choices
                    recent_nums = set(order_ls[-MAX_REPEAT_NUM:])
                    max_repeated = len(recent_nums) == 1
                    if max_repeated:
                        eligible_nums = num_population.difference(recent_nums)
                new_num = choice(tuple(eligible_nums))
                order_ls.append(new_num)
            return order_ls


        def gen_trial_orders(
            num_targets,
            min_seq_len,
            max_seq_len,
            num_trials):
            """
            Generates a list of lists, where each inner lists holds
            a random order in which targets should be lit up, based
            on:
                num_targets - number of targets in each screen
                min_seq_len - minimum sequence length
                max_seq_len - maximum sequence length
                num_trials - number of trials per difficulty level
            """
            trial_orders = []
            for seq_len in range(min_seq_len, max_seq_len+1):
                for trial in range(num_trials):
                    order_ls = gen_light_order(seq_len, num_targets)
                    trial_orders.append(order_ls)
            return trial_orders

        # check if target (x, y) coordinates have been manually
        # specified
        if TARGET_COORDINATES:
            point_ls = [Point(x, y) for x, y in TARGET_COORDINATES]
        else:
            # randomly generate (x, y) coordinates for the targets
            point_ls = gen_point_ls()

        # generate order of targets lighting up for each
        # trial
        if TARGET_SEQUENCES:
            trial_orders = TARGET_SEQUENCES
        else:
            trial_orders = gen_trial_orders(
                NUM_TARGETS,
                START_DIFFICULTY,
                END_DIFFICULTY,
                NUM_TRIALS
            )

        # generate one LightRect instance for each target
        # (numbering starting from 0)
        targets = []
        for i in range(NUM_TARGETS):
            new_target = LightRect(
                win=win,
                name='target_{}'.format(i),
                units='deg',
                ori=0,
                pos=point_ls[i].as_tuple(),
                width=TARGET_SIZE_DEG,
                height=TARGET_SIZE_DEG,
                fillColor=TARGET_NEUTRAL_COL,
                lineColor=TARGET_NEUTRAL_COL,
                lineWidth=1,
                lineColorSpace='rgb',
                fillColorSpace='rgb',
                opacity=1,
                depth=-2.0,
                interpolate=True)
            targets.append(new_target)

        # if numbers should be put on top of targets
        if USE_NUMBERS:
            # generate one TextStim instance for each target,
            # for numbers that will be put on top of the targets
            target_numbers = []
            for i in range(NUM_TARGETS):
                new_target_number = visual.TextStim(
                    win=win,
                    name='target_number_{}'.format(i),
                    text='placeholder',
                    font='Arial',
                    units='deg',
                    pos=point_ls[i].as_tuple(),
                    height=TARGET_SIZE_DEG*0.7,
                    wrapWidth=None, ori=0,
                    color=NUMBER_COL,
                    colorSpace='rgb',
                    opacity=1,
                    languageStyle='LTR',
                    depth=1.0)
                target_numbers.append(new_target_number)

        # initialize trial counter
        trial_counter = 0

        # initialize fail counter, which keeps track of
        # number of fails in a row
        fail_streak_counter = 0
      Begin Routine:
        # if using numbers on top of targets
        if USE_NUMBERS:
            # if number positions have been manually specified,
            # use those
            if NUMBER_POSITIONS:
                trial_num_pos = NUMBER_POSITIONS[trial_counter]
                for i, target_number in enumerate(target_numbers):
                    target_number.text = trial_num_pos[i]
            else:
                # randomly assign numbers to each text instance
                rand_number_ls = [x for x in range(1, NUM_TARGETS+1)]
                shuffle(rand_number_ls)
                for target_number in target_numbers:
                    target_number.text = rand_number_ls.pop()

        # fetch order in which targets should light up at beginning
        # of this trial
        light_order = trial_orders[trial_counter]

        # form list of targets, arranged in order in which they should
        # light up
        light_targets = [targets[index] for index in light_order]

        # store the sequence length
        seq_len = len(light_targets)

        # reset counter used for looping over order in which
        # targets should light up
        light_counter = 0

        # reset countdown timer for counting down time inbetween
        # targets lighting up during demonstration phase
        inter_light_countdown = 0

        # reset countdown timer for counting down time inbetween
        # demonstration/response phase
        phase_switch_countdown = 0

        # reset booleans indicating which phase of
        # the trial that is currently running
        demo_phase = True
        response_phase = False

        # reset targets
        for target in targets:
            target.rest_color = TARGET_NEUTRAL_COL
            target.fillColor = TARGET_NEUTRAL_COL
            target.lineColor = TARGET_NEUTRAL_COL

        # reset counter for registering number of clicks on targets
        click_counter = 0

        # reset counter for countdown until demonstration starts
        pre_phase_countdown = PRE_PHASE_DURATION

        # reset list of times when valid (on target) click responses
        # occur
        response_times = []

        # reset list of order in which the participant makes clicks
        click_order = []

        # fetch the routine start time
        trial_start_time = globalClock.getTime()

        # reset the trial phase variable
        trial_phase = PRE_PHASE
      Each Frame:
        # if in pre-demonstration phase
        if trial_phase == PRE_PHASE:
            pre_phase_countdown -= 1
            # comparing to -1 here since the demonstration phase
            # should only start on the flip **after** the last pre phase
            # flip
            if pre_phase_countdown <= -1:
                trial_phase = DEMO_PHASE
                # set the initial target that should light up and switch
                # it on (make it light up)
                light_target = light_targets[light_counter]
                light_target.switch_on(DEMO_LIGHT_DUR)

        # if in the demonstration phase
        if trial_phase == DEMO_PHASE:
            # decrement the countdown timer which keeps track of
            # number of flips until active target should light up
            inter_light_countdown -= 1
            # attempt to turn off the active target
            switched_off = light_target.switch_off()
            # if the active target was successfully switched off
            if switched_off:
                light_counter += 1
                # if there are more targets to light up
                if light_counter < seq_len:
                    # proceed to the next target to light up and start the
                    # countdown timer for when the target should light up
                    inter_light_countdown = DEMO_INTER_DUR
                    light_target = light_targets[light_counter]
            # if it's time to switch on the active target
            if inter_light_countdown <= 0:
                light_target.switch_on(DEMO_LIGHT_DUR)
                inter_light_countdown = 9999
            # if the whole sequence is done
            if light_counter >= seq_len and not light_target.is_lit:
                trial_phase = DEMO_TO_RESP_PHASE
                # add one to the inter phase countdown duration
                # to avoid this very flip decrementing the countdown
                phase_countdown = INTER_PHASE_DUR + 1

        # if in phase inbetween demonstration/response phase
        if trial_phase == DEMO_TO_RESP_PHASE:
            phase_countdown -= 1
            if phase_switch_countdown <= 0:
                for target in targets:
                    target.rest_color = TARGET_AWAIT_COL
                    target.fillColor = TARGET_AWAIT_COL
                    target.lineColor = TARGET_AWAIT_COL
                trial_phase = RESPONSE_PHASE
                rphase_start_time = trialClock.getTime()

        # if in the response or end phase
        if trial_phase in (RESPONSE_PHASE, END_PHASE):
            # try to switch off each of the targets (so that
            # clicked targets are switched off properly)
            for target in targets:
                target.switch_off()

        # check if mouse button has been clicked
        buttons = mouse_trial.getPressed()
        if buttons != prevButtonState:  # button state changed?
            prevButtonState = buttons
            # if currently in response phase and a new click was made
            if trial_phase == RESPONSE_PHASE and sum(buttons) > 0:
                # loop over the targets
                for target in targets:
                    # if mouse was inside of target
                    if target.contains(mouse_trial):
                        # switch on the target, increase counter, register
                        # which target the participant clicked
                        target.switch_on(RESP_FLASH_DUR)
                        click_counter += 1
                        click_order.append(targets.index(target))
                        # save the click time
                        response_time = trialClock.getTime() - rphase_start_time
                        response_times.append(response_time)

        # if all responses have been collected, start the end phase,
        # which lasts until the last target has finished flashing
        if click_counter >= seq_len and trial_phase == RESPONSE_PHASE:
            trial_phase = END_PHASE

        if trial_phase == END_PHASE:
            all_switched_off = True
            # check if any of the targets are still flashing
            for target in targets:
                if target.is_lit:
                    all_switched_off = False
            if all_switched_off:
                continueRoutine = False

        # draw all of the targets
        for target in targets:
            target.draw()

        # if using numbers on top of targets
        if USE_NUMBERS:
            for target_number in target_numbers:
                target_number.draw()
      End Routine:
        # check if participant's response was correct
        response_correct = light_order == click_order

        # if response was correct, reset fail counter.
        # otherwise, increment it
        if response_correct:
            fail_streak_counter = 0
        else:
            fail_streak_counter += 1
        # save trial data
        trials.addData('response_times', response_times)
        trials.addData('trial_start_time', trial_start_time)
        trials.addData('correct_order', light_order)
        trials.addData('click_order', click_order)
        trials.addData('response_correct', response_correct)

        # increment trial counter
        trial_counter += 1

        # if this was the last trial of a certain difficulty level
        level_end = (trial_counter % NUM_TRIALS) == 0
        if level_end:
            # if the participant failed all of the level's
            # trials, jump to end screen.
            failed_all = fail_streak_counter == NUM_TRIALS
            if failed_all:
                trials.finished = True
            # reset the fail counter in preparation for next level
            fail_streak_counter = 0
    MouseComponent mouse_trial
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end_routine
    TextComponent text_end
      letterHeight = TXT_SIZE_L
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Nu är du klar. Tack!
      units = deg
      wrapWidth = 25
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  Routine demo_practice
    CodeComponent code_practice
      Code Type = Py
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      Begin Routine:
        # if using numbers on top of targets
        if USE_NUMBERS:
            # set number positions for
            # practice, starting count from 1
            for i, target_number in enumerate(target_numbers):
                target_number.text = str(i + 1)

        # set order in which two targets should light up
        # for demonstration (middle-ish target, then first
        # target)
        light_order = [NUM_TARGETS // 2, 0]

        # form list of targets, arranged in order in which they should
        # light up
        light_targets = [targets[index] for index in light_order]

        # store the sequence length
        seq_len = len(light_targets)

        # reset counter used for looping over order in which
        # targets should light up
        light_counter = 0

        # reset countdown timer for counting down time inbetween
        # targets lighting up during demonstration phase
        inter_light_countdown = 0

        # reset countdown timer for counting down time inbetween
        # demonstration/response phase
        phase_switch_countdown = 0

        # reset booleans indicating which phase of
        # the trial that is currently running
        demo_phase = True
        response_phase = False

        # reset targets
        for target in targets:
            target.rest_color = TARGET_NEUTRAL_COL
            target.fillColor = TARGET_NEUTRAL_COL
            target.lineColor = TARGET_NEUTRAL_COL

        # reset counter for registering number of clicks on targets
        click_counter = 0

        # reset counter for countdown until demonstration starts
        pre_phase_countdown = PRE_PHASE_DURATION

        # reset list of times when valid (on target) click responses
        # occur
        response_times = []

        # reset list of order in which the participant makes clicks
        click_order = []

        # fetch the routine start time
        trial_start_time = globalClock.getTime()

        # reset the trial phase variable
        trial_phase = PRE_PHASE
      Each Frame:
        # if in pre-demonstration phase
        if trial_phase == PRE_PHASE:
            pre_phase_countdown -= 1
            # comparing to -1 here since the demonstration phase
            # should only start on the flip **after** the last pre phase
            # flip
            if pre_phase_countdown <= -1:
                trial_phase = DEMO_PHASE
                # set the initial target that should light up and switch
                # it on (make it light up)
                light_target = light_targets[light_counter]
                light_target.switch_on(DEMO_LIGHT_DUR)

        # if in the demonstration phase
        if trial_phase == DEMO_PHASE:
            # decrement the countdown timer which keeps track of
            # number of flips until active target should light up
            inter_light_countdown -= 1
            # attempt to turn off the active target
            switched_off = light_target.switch_off()
            # if the active target was successfully switched off
            if switched_off:
                light_counter += 1
                # if there are more targets to light up
                if light_counter < seq_len:
                    # proceed to the next target to light up and start the
                    # countdown timer for when the target should light up
                    inter_light_countdown = DEMO_INTER_DUR
                    light_target = light_targets[light_counter]
            # if it's time to switch on the active target
            if inter_light_countdown <= 0:
                light_target.switch_on(DEMO_LIGHT_DUR)
                inter_light_countdown = 9999
            # if the whole sequence is done
            if light_counter >= seq_len and not light_target.is_lit:
                trial_phase = DEMO_TO_RESP_PHASE
                # add one to the inter phase countdown duration
                # to avoid this very flip decrementing the countdown
                phase_countdown = INTER_PHASE_DUR + 1

        # if in phase inbetween demonstration/response phase
        if trial_phase == DEMO_TO_RESP_PHASE:
            phase_countdown -= 1
            if phase_switch_countdown <= 0:
                for target in targets:
                    target.rest_color = TARGET_AWAIT_COL
                    target.fillColor = TARGET_AWAIT_COL
                    target.lineColor = TARGET_AWAIT_COL
                trial_phase = RESPONSE_PHASE
                rphase_start_time = trialClock.getTime()

        # if in the response or end phase
        if trial_phase in (RESPONSE_PHASE, END_PHASE):
            # draw the instruction text
            text_practice.draw()
            # try to switch off each of the targets (so that
            # clicked targets are switched off properly)
            for target in targets:
                target.switch_off()

        # check if mouse button has been clicked
        buttons = mouse_trial.getPressed()
        if buttons != prevButtonState:  # button state changed?
            prevButtonState = buttons
            # if currently in response phase and a new click was made
            if trial_phase == RESPONSE_PHASE and sum(buttons) > 0:
                # loop over the targets
                for target in targets:
                    # if mouse was inside of target
                    if target.contains(mouse_trial):
                        # switch on the target, increase counter, register
                        # which target the participant clicked
                        target.switch_on(RESP_FLASH_DUR)
                        click_counter += 1
                        click_order.append(targets.index(target))
                        # save the click time
                        response_time = trialClock.getTime() - rphase_start_time
                        response_times.append(response_time)

        # if all responses have been collected, start the end phase,
        # which lasts until the last target has finished flashing
        if click_counter >= seq_len and trial_phase == RESPONSE_PHASE:
            trial_phase = END_PHASE

        if trial_phase == END_PHASE:
            all_switched_off = True
            # check if any of the targets are still flashing
            for target in targets:
                if target.is_lit:
                    all_switched_off = False
            if all_switched_off:
                continueRoutine = False

        # draw all of the targets
        for target in targets:
            target.draw()

        # if using numbers on top of targets
        if USE_NUMBERS:
            for target_number in target_numbers:
                target_number.draw()
      End Routine:
        # check if participant's response was correct
        response_correct = light_order == click_order

        # if response was correct, end practice
        # (otherwise loop the practice until success)
        if response_correct:
            practice_loop.finished = True
    TextComponent text_practice
      letterHeight = TXT_SIZE_M
      pos = PRACTICE_TXT_PLACEMENT
      startVal [time (s)] = 9999
      text = $PRACTICE_TXT
      units = deg
      wrapWidth = 20
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  Routine instructions_part1
    TextComponent text_instructions_1
      letterHeight = TXT_SIZE_M
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $INSTRUCTIONS_TXT
      units = deg
      wrapWidth = 25
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    MouseComponent mouse_instructions_1
      clickable = text_continue
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent text_continue
      letterHeight = TXT_SIZE_S
      pos = INSTRUCTIONS_CONTINUE_TXT_PLACEMENT
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $INSTRUCTIONS_CONTINUE_TXT
      units = deg
      wrapWidth = 25
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    CodeComponent code_constants
      Code Type = Py
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      Before Experiment:
        ### SET EXPERIMENT CONSTANTS ###
        # should numbers, starting from 1 and randomly arranged
        # for each trial, be put on top of the targets?
        USE_NUMBERS = True
        # 'on-top' numbers color
        NUMBER_COL = "#000000"

        # duration of each trial's 'pre phase', before demonstration
        # starts,in which targets are simply shown in grey
        # (with numbers on top of them, if using numbers)
        # durations are specified in screen flips (one flip
        # corresponds to 1/60s on most screens)
        PRE_PHASE_DURATION = 120

        # width/height of area where targets
        # can appear, in degrees
        AREA_WIDTH_DEG = 22
        AREA_HEIGHT_DEG = 13

        # target size, in degrees
        TARGET_SIZE_DEG = 2.5

        # minimum distance between targets.
        # this is the distance between targets' CENTRES,
        # meaning a distance of 0 would indicate that two
        # targets perfectly overlap.
        # PLEASE NOTE that if you set this minimum distance
        # to a value that's too high, PsychoPy will become stuck
        # in an infinite loop. so please think carefully about
        # how much space is available (area width/height) for
        # distanced targets to fit
        MIN_TARGET_DISTANCE = TARGET_SIZE_DEG * 2.2

        # target neutral (not lit up and not awaiting response) color
        TARGET_NEUTRAL_COL = "#FFFFFF"
        # target light up (or click) color
        TARGET_LIGHT_COL = "#FFFF00"
        # target awaiting participant response color
        TARGET_AWAIT_COL = "#AAAAAA"

        # target text clicked color
        TARGET_CLICKED_COL = "#BBFFBB"

        # number of trials to run per difficulty level
        NUM_TRIALS = 3

        # number of potential targets to show in each trial
        NUM_TARGETS = 9

        # starting difficulty level, ie number of targets
        # lighting up in the first trial
        START_DIFFICULTY = 2
        # highest difficulty level, ie number of squares
        # lighting up in the last trial (if the participant
        # doesn't fail all trials of a difficulty level
        # before then)
        END_DIFFICULTY = 9

        # duration (in flips) for which targets should light up while
        # demonstrating the sequence to the participant.
        DEMO_LIGHT_DUR = 60
        # duration to wait inbetween lighting up targets
        # during demonstration phase
        DEMO_INTER_DUR = 30
        # duration for which targets should flash when clicked
        RESP_FLASH_DUR = 6
        # duration of pause between demonstration/response
        # phase
        INTER_PHASE_DUR = 30

        # by default, pseudorandom target sequences,
        # only allowing 2 'light-up' repeats of the same target
        # in a row, are generated for each participant.
        # if you want the same sequence to be used for
        # every participant, change the TARGET_SEQUENCES
        # setting below, which overrides this setting.
        # if you want to change the maximum number
        # of allowed 'repeats-in-a-row', change this setting
        # (set a very high number, eg 9999, if you want
        # completely random target sequences)
        MAX_REPEAT_NUM = 2

        # MANUALLY SPECIFIED SEQUENCES
        # if you want to **override** target sequence generation
        # and use the same set of sequences for all participants
        # you can input a specific list of
        # sequences below. run the script
        # ''specifications_generation/wm_generate_sequences.py'
        # and then put the output here as per the example below.
        # otherwise, just leave TARGET_SEQUENCES as
        # an empty list ( '[]' )
        #TARGET_SEQUENCES = [
        #    [5, 6],
        #    [4, 0],
        #    [8, 0],
        #    [0, 3, 3],
        #    [8, 5, 1],
        #    [6, 5, 6],
        #]
        TARGET_SEQUENCES = []

        # MANUALLY SPECIFIED TARGET COORDINATES
        # if you want to **override** target positions/coordinates
        # generation and use the same set of coordinates for all
        # participants you can input them here. run the script
        # ''specifications_generation/wm_generate_target_coordinates.py'
        # and then put the output here as per the example below.
        # otherwise, just leave the empty tuple ('()') alone.
        #TARGET_COORDINATES = (
        #    (4.7, 4.58),
        #    (-1.861, -1.17),
        #    (1.781, -5.79),
        #    (7.054, -3.356),
        #    (-8.6, -2.382),
        #    (-9.274, 3.6),
        #)
        TARGET_COORDINATES = ()

        # MANUALLY SPECIFIED NUMBER POSITIONS
        # look here if you have set `USE_NUMBERS = True` above
        # and you want to **override** number position generation
        # in order to use the same set of positions for all
        # participants. run the script
        # 'specifications_generation/wm_generate_number_positions.py'
        # and then put the output here, like in the example
        # below. otherwise, just leave an empty list here.
        #NUMBER_POSITIONS = [
        #    [4, 6, 3, 7, 8, 1, 5, 2, 9],
        #    [7, 2, 8, 5, 9, 6, 1, 4, 3],
        #    [7, 9, 5, 4, 3, 6, 2, 8, 1],
        #    [4, 9, 3, 7, 1, 6, 8, 2, 5],
        #    [8, 9, 7, 2, 1, 5, 4, 6, 3],
        #    [8, 6, 7, 5, 1, 9, 4, 2, 3],
        #]
        NUMBER_POSITIONS = []

        # large/medium/small instructions text size,
        # in degrees
        TXT_SIZE_L = 2
        TXT_SIZE_M = 0.8
        TXT_SIZE_S = 0.6

        # experiment instructions, first instructions screen
        # "In this test you will be shown squares.\nThe squares will
        # light up in a particular order. You are to memorize the
        # order in which they light up. Once they
        # have finished lighting up, you are to click the squares
        # in the same order.\n\n
        # Use the left mouse button to click the squares."
        INSTRUCTIONS_TXT_1 = (
            "I det här testet kommer du att visas rutor.\n"
            "Rutorna kommer att lysa upp i en viss ordning."
            "Du ska memorisera i vilken ordning som "
            "de lyser upp. När de lyst klart ska du klicka "
            "på rutorna i samma ordning.\n\n"
            "Använd vänster musknapp för att klicka på rutorna."
        )

        # first instructions screen 'continue' message
        # "Click here to see an example"
        INSTRUCTIONS_CONTINUE_TXT = (
            "Klicka här för att se ett exempel"
        )

        # placement of instructions screens' 'continue' messages,
        # (x, y) coordinates in degrees
        INSTRUCTIONS_CONTINUE_TXT_PLACEMENT = (0, -6)

        # practice trial instructions, shown after light-up
        # sequence has been demonstrated
        # "Click the boxes in the order that they lit up"
        PRACTICE_TXT = (
            "Tryck på fyrkanterna i ordningen som de lyste upp"
        )

        # placement of practice trial instructions,
        # (x, y) coordinates in degrees
        # (the default is to place the text just below the
        # target area)
        PRACTICE_TXT_PLACEMENT = (
            0, -(AREA_HEIGHT_DEG/2 + TXT_SIZE_M*3)
        )

        # experiment instructions, second instructions screen
        # "Throughout the experiment the number of boxes that
        # light up will increase. Answer as correctly as possible.\n\n
        # The test takes about 5-15 minutes. You will be shown a message
        # when you are finished."
        INSTRUCTIONS_TXT_2 = (
            "Under testet kommer antalet fyrkanter som lyser upp att "
            "bli fler och fler. Svara så korrekt som möjligt.\n\n"
            "Testet tar cirka 5-15 minuter att genomföra. "
            "Du kommer att visas ett meddelande när du är klar."
        )

        # second instructions screen 'continue'/'start experiment' message
        # "Click here to start the experiment"
        INSTRUCTIONS_START_TXT = (
            "Klicka här för att starta experimentet"
        )

        ### END SET EXPERIMENT CONSTANTS ###
  Routine instructions_part2
    TextComponent text_instructions_2
      letterHeight = TXT_SIZE_M
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $INSTRUCTIONS_TXT_2
      units = deg
      wrapWidth = 25
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    MouseComponent mouse_instructions_2
      clickable = text_start
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent text_start
      letterHeight = TXT_SIZE_S
      pos = INSTRUCTIONS_CONTINUE_TXT_PLACEMENT
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $INSTRUCTIONS_START_TXT
      units = deg
      wrapWidth = 25
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    CodeComponent code_constants_2
      Code Type = Py
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      Before Experiment:
        ### SET EXPERIMENT CONSTANTS ###
        # should numbers, starting from 1 and randomly arranged
        # for each trial, be put on top of the targets?
        USE_NUMBERS = True
        # 'on-top' numbers color
        NUMBER_COL = "#000000"

        # duration of each trial's 'pre phase', before demonstration
        # starts,in which targets are simply shown in grey
        # (with numbers on top of them, if using numbers)
        # durations are specified in screen flips (one flip
        # corresponds to 1/60s on most screens)
        PRE_PHASE_DURATION = 120

        # width/height of area where targets
        # can appear, in degrees
        AREA_WIDTH_DEG = 22
        AREA_HEIGHT_DEG = 13

        # target size, in degrees
        TARGET_SIZE_DEG = 2.5

        # minimum distance between targets.
        # this is the distance between targets' CENTRES,
        # meaning a distance of 0 would indicate that two
        # targets perfectly overlap.
        # PLEASE NOTE that if you set this minimum distance
        # to a value that's too high, PsychoPy will become stuck
        # in an infinite loop. so please think carefully about
        # how much space is available (area width/height) for
        # distanced targets to fit
        MIN_TARGET_DISTANCE = TARGET_SIZE_DEG * 2.2

        # target neutral (not lit up and not awaiting response) color
        TARGET_NEUTRAL_COL = "#FFFFFF"
        # target light up (or click) color
        TARGET_LIGHT_COL = "#FFFF00"
        # target awaiting participant response color
        TARGET_AWAIT_COL = "#AAAAAA"

        # target text clicked color
        TARGET_CLICKED_COL = "#BBFFBB"

        # number of trials to run per difficulty level
        NUM_TRIALS = 3

        # number of potential targets to show in each trial
        NUM_TARGETS = 9

        # starting difficulty level, ie number of targets
        # lighting up in the first trial
        START_DIFFICULTY = 2
        # highest difficulty level, ie number of squares
        # lighting up in the last trial (if the participant
        # doesn't fail all trials of a difficulty level
        # before then)
        END_DIFFICULTY = 9

        # duration (in flips) for which targets should light up while
        # demonstrating the sequence to the participant.
        DEMO_LIGHT_DUR = 60
        # duration to wait inbetween lighting up targets
        # during demonstration phase
        DEMO_INTER_DUR = 30
        # duration for which targets should flash when clicked
        RESP_FLASH_DUR = 6
        # duration of pause between demonstration/response
        # phase
        INTER_PHASE_DUR = 30

        # by default, pseudorandom target sequences,
        # only allowing 2 'light-up' repeats of the same target
        # in a row, are generated for each participant.
        # if you want the same sequence to be used for
        # every participant, change the TARGET_SEQUENCES
        # setting below, which overrides this setting.
        # if you want to change the maximum number
        # of allowed 'repeats-in-a-row', change this setting
        # (set a very high number, eg 9999, if you want
        # completely random target sequences)
        MAX_REPEAT_NUM = 2

        # MANUALLY SPECIFIED SEQUENCES
        # if you want to **override** target sequence generation
        # and use the same set of sequences for all participants
        # you can input a specific list of
        # sequences below. run the script
        # ''specifications_generation/wm_generate_sequences.py'
        # and then put the output here as per the example below.
        # otherwise, just leave TARGET_SEQUENCES as
        # an empty list ( '[]' )
        #TARGET_SEQUENCES = [
        #    [5, 6],
        #    [4, 0],
        #    [8, 0],
        #    [0, 3, 3],
        #    [8, 5, 1],
        #    [6, 5, 6],
        #]
        TARGET_SEQUENCES = []

        # MANUALLY SPECIFIED TARGET COORDINATES
        # if you want to **override** target positions/coordinates
        # generation and use the same set of coordinates for all
        # participants you can input them here. run the script
        # ''specifications_generation/wm_generate_target_coordinates.py'
        # and then put the output here as per the example below.
        # otherwise, just leave the empty tuple ('()') alone.
        #TARGET_COORDINATES = (
        #    (4.7, 4.58),
        #    (-1.861, -1.17),
        #    (1.781, -5.79),
        #    (7.054, -3.356),
        #    (-8.6, -2.382),
        #    (-9.274, 3.6),
        #)
        TARGET_COORDINATES = ()

        # MANUALLY SPECIFIED NUMBER POSITIONS
        # look here if you have set `USE_NUMBERS = True` above
        # and you want to **override** number position generation
        # in order to use the same set of positions for all
        # participants. run the script
        # 'specifications_generation/wm_generate_number_positions.py'
        # and then put the output here, like in the example
        # below. otherwise, just leave an empty list here.
        #NUMBER_POSITIONS = [
        #    [4, 6, 3, 7, 8, 1, 5, 2, 9],
        #    [7, 2, 8, 5, 9, 6, 1, 4, 3],
        #    [7, 9, 5, 4, 3, 6, 2, 8, 1],
        #    [4, 9, 3, 7, 1, 6, 8, 2, 5],
        #    [8, 9, 7, 2, 1, 5, 4, 6, 3],
        #    [8, 6, 7, 5, 1, 9, 4, 2, 3],
        #]
        NUMBER_POSITIONS = []

        # large/medium/small instructions text size,
        # in degrees
        TXT_SIZE_L = 2
        TXT_SIZE_M = 0.8
        TXT_SIZE_S = 0.6

        # experiment instructions, first instructions screen
        # "In this test you will be shown squares.\nThe squares will
        # light up in a particular order. You are to memorize the
        # order in which they light up. Once they
        # have finished lighting up, you are to click the squares
        # in the same order.\n\n
        # Use the left mouse button to click the squares."
        INSTRUCTIONS_TXT = (
            "I det här testet kommer du att visas rutor.\n"
            "Rutorna kommer att lysa upp i en viss ordning."
            "Du ska memorisera i vilken ordning som "
            "de lyser upp. När de lyst klart ska du klicka "
            "på rutorna i samma ordning.\n\n"
            "Använd vänster musknapp för att klicka på rutorna."
        )

        # first instructions screen 'continue' message
        # "Click here to see an example"
        INSTRUCTIONS_CONTINUE_TXT = (
            "Tryck här för att se ett exempel"
        )

        # placement of instructions screen 'continue' message,
        # (x, y) coordinates in degrees
        INSTRUCTIONS_CONTINUE_TXT_PLACEMENT = (0, -6)

        # practice trial instructions, shown after light-up
        # sequence has been demonstrated
        # "Click the boxes in the order that they lit up"
        PRACTICE_TXT = (
            "Tryck på fyrkanterna i ordningen som de lyste upp"
        )

        # placement of practice trial instructions,
        # (x, y) coordinates in degrees
        # (the default is to place the text just below the
        # target area)
        PRACTICE_TXT_PLACEMENT = (
            0, -(AREA_HEIGHT_DEG/2 + TXT_SIZE_M*3)
        )

        #    "Testet tar cirka 5-15 minuter att genomföra."

        ### END SET EXPERIMENT CONSTANTS ###
Flow
  Routine instructions_part1
  LoopInitiator practice_loop loopType="TrialHandler"
    loopType = random
    nReps = 9999
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    Routine demo_practice
  LoopTerminator practice_loop
  Routine instructions_part2
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = NUM_TRIALS * (END_DIFFICULTY - START_DIFFICULTY + 1)
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    Routine trial
  LoopTerminator trials
  Routine end_routine
